PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(0.0000, 0.0000, 0.0000)
  expName = exp
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        # NOTE: Replace 'target_word' with the actual name of your column in your Excel/CSV conditions file!
        marker_text = f"Cue_Start: {target_word}"

        # Send the marker exactly when the screen refreshes to show the word
        win.callOnFlip(outlet.push_sample, [marker_text])
    TextComponent stimulus_go_txt
      color = $(0.1294, 0.8667, 0.1294)
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      text [set every repeat] = $target_word
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  Routine Finish
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5
      text = Experiment finished
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    CodeComponent finish_code
      Code Type = Py
      End Experiment:
        # Destroy the LSL stream to release the background thread
        try:
            del outlet
            del info
            print("LSL marker stream closed cleanly.")
        except:
            pass
  Routine Instructions_silent
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    KeyboardComponent instructions_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent inst_silent_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Look at the center cross.

        A white word will appear.

        When the word turns green, perform the silent speech (articulate the word without sound).
  Routine wait
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        # Ejemplo: Duración aleatoria entre 1 y 3 segundos
        import numpy as np
        duracion_estimulo = np.random.uniform(0.5, 1.5)
    TextComponent ready_txt
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = $duracion_estimulo
      text = +
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  Routine Instructions_imagined
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    KeyboardComponent instructions_key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent inst_imagined_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Look at the center cross.

        A white word will appear.

        When the word turns green, perform the imagined speech (imagine yourself saying the word without movement).
  Routine Welcome
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    TextComponent welcome_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Welcome
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    CodeComponent welcome_code
      Code Type = Py
      Before Experiment:
        import socket
        import time
        from pylsl import StreamInfo, StreamOutlet
        import atexit
        import os
      Begin Experiment:
        # 1. Delayed fuse to prevent the final freeze
        atexit.register(lambda: os._exit(0))

        # 2. Set our starting block number
        block_num = 1
        imagined_batch = 1
        silent_batch = 1

        # 3. Create the marker stream ONLY ONCE
        info = StreamInfo('PsychoPy_Markers', 'Markers', 1, 0, 'string', 'my_silent_speech_exp')
        outlet = StreamOutlet(info)
        time.sleep(0.1)
        print("LSL Marker Stream created for the whole experiment.")
  Routine Start_record
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    CodeComponent code_start
      Code Type = Py
      Begin Routine:
        try:
            lr_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            lr_socket.settimeout(2.0)
            lr_socket.connect(("localhost", 22345))

            def send_cmd(cmd):
                lr_socket.sendall(cmd.encode('utf-8') + b"\n")
                time.sleep(0.2)
                try: lr_socket.recv(1024)
                except: pass

            send_cmd("update")
            send_cmd("select all")

                # NEW: Dynamically name the file based on the block number!
            if block_num == 1:
                block = "calibration"
            elif block_num == 2:
                block = "silent"
            elif block_num == 3:
                block = "imagined"

            subj_id = expInfo.get('participant', 'test_subject')
            session_num = expInfo.get('session', '1')
            file_path = "C:\\Users\\User\\Documents\\NEUROTEC\\TFM\\Psychopy\\Experiments\\LSL_data\\" + block + "\\"



            file_cmd = "filename {root:" + file_path + "} {template:exp_sub_" + str(subj_id) +"_ses_" + str(session_num) + "_bl_" + block + ".xdf}"
            send_cmd(file_cmd)

            send_cmd("start")

            # Safely close this specific connection
            lr_socket.close()

            print(f"LabRecorder successfully started for BLOCK {block}!")

            # Increment the counter so the next loop is named block 2, block 3, etc.
            block_num += 1

        except Exception as e:
            print("LabRecorder start failed:", e)
  Routine Stop_record
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    CodeComponent stop_code
      Code Type = Py
      Begin Routine:
        win.callOnFlip(outlet.push_sample, [f"{block}_BLOCK_END"])
        print(f"{block} block finished")
      End Routine:
        try:
            stop_socket = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
            stop_socket.settimeout(2.0)
            stop_socket.connect(("localhost", 22345))
            stop_socket.sendall(b"stop\n")
            stop_socket.close()
            print("Loop finished. LabRecorder stopped and block file saved.")
        except:
            pass
  Routine calibration
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    TextComponent fixCal
      letterHeight = 0.05
      startVal [time (s)] = 0.3
      stopVal [duration (s)] = 0.3
      text = +
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    TextComponent calStim
      letterHeight = 0.18
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = X
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    CodeComponent cal_code
      Code Type = Py
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      Begin Routine:
        import random
        p_target = 0.10
        is_target = (random.random() < p_target)

        if is_target:
            cal_char = str(random.randint(0, 9))
            tag = "T"
        else:
            cal_char = chr(random.randint(ord('A'), ord('Z')))
            tag = "NT"

        # Set the stimulus text *here* (so it is defined before drawing)
        calStim.setText(cal_char)

        # Marker aligned to the screen flip
        win.callOnFlip(outlet.push_sample, [f"CAL_STIM_ON:{cal_char}:{tag}"])
  Routine cal_instructions
    RoutineSettingsComponent cal_instructions
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      desc:
        Calibration (no mouthing).
        Look at the center and COUNT how many NUMBERS you see.
        Do not press any keys during calibration.
        Press SPACE to begin.
    KeyboardComponent calStartKeys
      allowedKeys = ["space"]
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Calibration (no mouthing).
        Look at the center and COUNT how many NUMBERS you see.
        Do not press any keys during calibration.
        Press SPACE to begin.
    CodeComponent calibration_code
      Code Type = Py
      Begin Routine:
        import random
        random.seed(12345)
        win.callOnFlip(outlet.push_sample, ["CAL_BLOCK_START"])
  Routine mini_break
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    CodeComponent break_code
      Code Type = Py
      Begin Routine:
        # BLOCK_LOOP.thisN tracks how many times the outer loop has run (starts at 0)
        if block_num == 3:
            current_batch = silent_batch
            silent_batch += 1
            marker_txt = "SILENT_LOOP_BREAK_END"
        elif block_num == 4:
            current_batch = imagined_batch
            imagined_batch += 1
            marker_txt = "IMAGINED_LOOP_BREAK_END"


        # Create the text to show the user
        break_text = f"Loop {current_batch} finished!\n\nTake a short rest, blink, and swallow.\nPress SPACEBAR to start the next 10 words."
      End Routine:
        win.callOnFlip(outlet.push_sample, [marker_txt])
    KeyboardComponent break_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent break_txt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $break_text
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  Routine read
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    TextComponent stimulus_txt_2
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $target_word
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Flow
  Routine Welcome
  Routine cal_instructions
  Routine Start_record
  LoopInitiator cal loopType="TrialHandler"
    loopType = sequential
    nReps = 200
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    Routine calibration
  LoopTerminator cal
  Routine Stop_record
  Routine Instructions_silent
  Routine Start_record
  LoopInitiator break_loop loopType="TrialHandler"
    loopType = random
    nReps = 10
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    LoopInitiator trials_silent loopType="TrialHandler"
      conditionsFile = Conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'target_word': '1 (ONE)'},
        {'target_word': '2 (TWO)'},
        {'target_word': '3 (THREE)'},
        {'target_word': '4 (FOUR)'},
        {'target_word': '5 (FIVE)'},
        {'target_word': 'REJOIN'},
        {'target_word': 'ASSET'},
        {'target_word': 'ABORT'},
        {'target_word': 'FORMATION'},
        {'target_word': 'REFUEL'}]
      Routine wait
      Routine read
      Routine trial
    LoopTerminator trials_silent
    Routine mini_break
  LoopTerminator break_loop
  Routine Stop_record
  Routine Instructions_imagined
  Routine Start_record
  LoopInitiator break_loop2 loopType="TrialHandler"
    loopType = random
    nReps = 10
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    LoopInitiator trials_imagined loopType="TrialHandler"
      conditionsFile = Conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'target_word': '1 (ONE)'},
        {'target_word': '2 (TWO)'},
        {'target_word': '3 (THREE)'},
        {'target_word': '4 (FOUR)'},
        {'target_word': '5 (FIVE)'},
        {'target_word': 'REJOIN'},
        {'target_word': 'ASSET'},
        {'target_word': 'ABORT'},
        {'target_word': 'FORMATION'},
        {'target_word': 'REFUEL'}]
      Routine wait
      Routine read
      Routine trial
    LoopTerminator trials_imagined
    Routine mini_break
  LoopTerminator break_loop2
  Routine Stop_record
  Routine Finish
